---
API: 2
OpenSesame: 3.1.4
Platform: nt
---
set width 800
set uniform_coordinates yes
set title "Slimmer Stampen"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_suppress_warnings yes
set mouse_backend xpyriment
set keyboard_backend legacy
set height 600
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 22
set font_italic no
set font_family mono
set font_bold no
set experiment_path "E:\\slimmerstampen"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#b4b4b4"

define inline_script end_of_exp
	set description "Executes Python code"
	___run__
	my_canvas = canvas()
	my_canvas.text("Score:", y = -150)
	my_canvas.text(str(var.score) + " / " + str(var.numitems), y = -100)
	my_canvas.text(feedback, y = 50)
	my_canvas.show()
	exp.sleep(10000)
	__end__
	___prepare__
	feedback = "This is the end of the experiment.<br />Thank you for participating!<br /><br />We hope you will put your new knowledge<br />of Zulu words to good use.<br /><br />The experiment will exit automatically."
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup_and_functions always
	run pygaze_init always
	run instructions_rehearsal always
	run instructions_feedback always
	run prepare_rehearsal always
	run while_there_is_time_left always
	run test_instructions always
	run generate_test_trials always
	run test_loop always
	run end_of_exp always

define inline_script generate_new_rehearsal_trial
	set description "Executes Python code"
	___run__
	# Generate a new trial for the fact that most urgently needs presenting
	
	prompt, answer = get_optimal_fact()
	
	trial = create_trial(prompt, answer, var.distractors)
	
	var.PROMPT, var.ANSWER, var.DISTRACTOR1, var.DISTRACTOR2 = trial
	__end__
	set _prepare ""

define inline_script generate_test_trials
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Read prompts and correct answers from a file
	facts = read_items_from_file(var.facts_file)
	distractors = read_items_from_file(var.distractors_file)
		
	# Create a new set of trials
	trials = create_trials(facts, distractors)
	
	# Write trials to a file that OpenSesame can read
	write_trials_to_file(trials, 'testtrials.csv')
			
	# Test score logging
	var.score = 0
	var.numitems = len(trials)
	__end__

define sketchpad instructions_feedback
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Directly after selecting an answer you will get feedback.<br />The correct answer will be highlighted in green.<br />If you gave an incorrect answer it will be<br />highlighted in red.<br /><br />Press any key to start practising." x=0 y=0 z_index=0

define sketchpad instructions_rehearsal
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Time to practice some Zulu words!<br /><br />Instructions:<br />Focus on the fixation dot. A Zulu word will appear there.<br />Try to recall the English translation.<br /><br />After a few seconds, three answer options will appear,<br />from which you select the correct one by clicking on it.<br /><br />Note: you only have a short time to select the answer.<br /><br />Press any key to continue.<br />" x=0 y=0 z_index=0

define inline_script item_script
	set description "Executes Python code"
	___run__
	##
	## Runs a single trial:
	## Starts by showing a 4000 ms fixation cross and measuring a baseline pupil dilation during the last 250 ms.
	## Then shows just the prompt for 3000 ms, while constantly measuring pupil size.
	## After that the three answer options appear below the prompt.
	## The participant has to click an answer within the time limit.
	##
	
	## STIMULI ##
	prompt = var.PROMPT
	
	# Shuffle the answer options
	answer_options = [var.ANSWER, var.DISTRACTOR1, var.DISTRACTOR2]
	design.randomize.shuffle_list(answer_options)
	
	## FIXATION ##
	# Show the fixation cross
	my_canvas = canvas(auto_prepare = False)
	my_canvas.penwidth = 2
	my_canvas.fixdot(style='large-cross')
	my_canvas.prepare()
	my_canvas.show()
	exp.sleep(fixation_length - baseline_length)
	
	# Measure baseline pupil size
	start_time = exp.time()
	sample_time = start_time + sample_time_window
	while True:
		# get current time
		current_time = exp.time()
		if current_time >= sample_time:
			# If it's time to take a sample:
			
			# get pupil size
			pupilsize = exp.pygaze_eyetracker.pupil_size()
			
			# append to baseline list
			baseline.append(pupilsize)
			
			# Set next sample point
			sample_time = sample_time + sample_time_window
			if sample_time > start_time + baseline_length:
				break
	
	# Print baseline measurements
	#print "The baseline measurements for this trial are: "
	#print baseline
	baseline_full = baseline
	baseline = [x for x in baseline if x is not 0] 	# Remove zero values from baseline
	mean_baseline = round(float(sum(baseline))/max(len(baseline),1))
	print "The baseline pupil size is {} (average of {} measurements).".format(str(mean_baseline), str(len(baseline)))
	
	## PROMPT ##
	# Show the prompt
	my_canvas = canvas(auto_prepare = False)
	my_canvas.text(prompt, font_size = prompt_font_size)
	my_canvas.prepare()
	my_canvas.show()
	
	# Measure pupil size during prompt presentation
	start_time = exp.time()
	sample_time = start_time + sample_time_window
	while True:
		# get current time
		current_time = exp.time()
		if current_time >= sample_time:
			# If it's time to take a sample:
			
			# get pupil size
			pupilsize = exp.pygaze_eyetracker.pupil_size()
			
			# append to pupil response list
			pupil_response.append(pupilsize)
			
			# Set next sample point
			sample_time = sample_time + sample_time_window
			if sample_time > start_time + prompt_length:
				break
	
	
	# Trim top and bottom 2.5% off pupil response data to remove most of the blink artefacts
	pupil_response = trim_artefacts(pupil_response)
	
	
	# Print pupil measurements
	max_pupil_response = max(pupil_response)
	print "The maximum pupil size during item presentation is {} (maximum of {} measurements).".format(str(max_pupil_response), str(len(pupil_response)))
	
	pcps = calculate_pcps(baseline, pupil_response)
	print "The PCPS is {}.".format(pcps)
	
	
	## ANSWERING ##
	# Show the answer options
	
	my_canvas.rect(*button_coords[0])
	my_canvas.rect(*button_coords[1])
	my_canvas.rect(*button_coords[2])
	
	my_canvas.text(answer_options[0], y = text_coords[0])
	my_canvas.text(answer_options[1], y = text_coords[1])
	my_canvas.text(answer_options[2], y = text_coords[2])
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Show the mouse, and wait for a mouse click
	my_mouse.show_cursor(True)
	
	start_time  = exp.time()
	sample_time = start_time + sample_time_window
	response = None
	timed_out = False
	while True:
		# Stop once the participant has pressed a button
		if response is not None:
			rt = timestamp - start_time
			break
		
		# Otherwise get the latest mouse data
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # If there's a new left mouse click
			response = button_clicked(position) # Check if it's on a button		
			my_mouse.flush() # Get rid of click data
			
		# Stop when time is up and no button has been pressed
		if timestamp - start_time > max_response_time:
			timed_out = True
			response = -1
			rt = None
			print 'Timeout'
	
	## FEEDBACK ##
	
	correct_index = answer_options.index(var.ANSWER)
	ans_correct = response == correct_index
	
	incorrect_index = -1
	if not ans_correct:
		incorrect_index = response
	
	
	
	# Hide the mouse cursor
	my_mouse.show_cursor(False)
	
	# Show feedback
	my_canvas = canvas(auto_prepare=False)
	my_canvas.text(prompt, font_size = prompt_font_size)
	
	for i in range(len(answer_options)):
		ypos = 75*(i+1)
		
		if i == correct_index:
			my_canvas.rect(x = -ans_width/2, y = ypos, w = ans_width, h = ans_height, color = correct_colour, fill = True)
		elif i == incorrect_index:
			my_canvas.rect(x = -ans_width/2, y = ypos, w = ans_width, h = ans_height, color = incorrect_colour, fill = True)
		else:
			my_canvas.rect(x = -ans_width/2, y = ypos, w = ans_width, h = ans_height)
		
	
	my_canvas.text(answer_options[0], y = text_coords[0])
	my_canvas.text(answer_options[1], y = text_coords[1])
	my_canvas.text(answer_options[2], y = text_coords[2])
	
	my_canvas.prepare()
	my_canvas.show()
	
	exp.sleep(feedback_time)
	
	
	## DATA LOGGING ##
	if response is not None:
		if response is -1:
			response = "none"
		else:
			response = answer_options[response]
	
	log_trial(word = var.PROMPT, correct = ans_correct, pcps = pcps, trial_num = var.trial_num)
			
	exp.set("response", response)
	exp.set("accuracy", int(ans_correct))
	exp.set("rt", rt)
	exp.set("baseline", baseline_full)
	exp.set("mean_baseline", mean_baseline)
	exp.set("pupil_response", pupil_response)
	exp.set("max_pupil_response", max_pupil_response)
	exp.set("phase", "rehearsal")
	exp.set("timestamp", clock.time())
	__end__
	___prepare__
	# Create a canvas that we can draw the items on
	my_canvas = canvas()
	
	# Create a mouse object so that we can control mouse visibility
	my_mouse = mouse()
	my_mouse.show_cursor(False)
	
	# Time-related constants
	fixation_length = 4000 # includes time needed for baseline measurement
	baseline_length = 250 # time that baseline is measured at the end of fixation
	prompt_length = 4000 # time that the prompt is displayed
	max_response_time = 4000 # time that the participant has to press a button
	feedback_time = 1000 # time that the feedback is shown
	sample_rate = 50 # Hz, number of pupil measurements per second
	sample_time_window = 1000 / sample_rate # time between pupil measurements
	
	
	# Canvas-related constants
	ans_width = 250 # width of answer boxes
	ans_height = 60 # height of answer boxes
	prompt_font_size = 30 # Font size of prompt (in pixels)
	
	# Feedback colours (available options: https://www.w3.org/TR/SVG11/types.html#ColorKeywords)
	correct_colour = 'limegreen'
	incorrect_colour = 'red'
	
	# Answer button coordinates
	button_coords = []
	text_coords = []
	for i in range(3):
		# xmin, ymin, width, height
		button = [-ans_width/2, 75*(i+1), ans_width, ans_height]
		button_coords.append(button)
		
		button_text = 75*(i+1)+ans_height/2
		text_coords.append(button_text)
	
	
	
	def button_clicked(pos):
		'''
		Returns button number if mouse position pos falls within the bounds of a button, and None otherwise.
		'''
		
		for i in range(len(button_coords)):
			button = button_coords[i]
	
			xmin = button[0]
			xmax = button[0] + button[2]
			ymin = button[1]
			ymax = button[1] + button[3]
	
			if (pos[0] >= xmin and pos[0] <= xmax and pos[1] >= ymin and pos[1] <= ymax):
				return i
		return None
		
	
	# Eye tracking recording
	baseline = []
	pupil_response = []
	__end__

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log PROMPT
	log ANSWER
	log DISTRACTOR1
	log DISTRACTOR2
	log response
	log accuracy
	log rt
	log baseline
	log mean_baseline
	log pupil_response
	log max_pupil_response
	log phase
	log timestamp

define inline_script posttrial_checks
	set description "Executes Python code"
	___run__
	current_time = clock.time()
	
	if current_time - var.rehearsal_start >= var.rehearsal_time_limit:
		print "Rehearsal time is up!"
		var.time_up = True
	
	
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script prepare_rehearsal
	set description "Executes Python code"
	___run__
	### Start clock for rehearsal session
	var.rehearsal_start = clock.time()
	__end__
	___prepare__
	### Start clock for rehearsal session
	var.time_up = False
	#var.rehearsal_start = clock.time()
	var.trial_num = 1
	
	var.PROMPT = ""
	var.ANSWER = ""
	var.DISTRACTOR1 = ""
	var.DISTRACTOR2 = ""
	__end__

define pygaze_init pygaze_init
	set tracker_type EyeLink
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define pygaze_start_recording pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sequence rehearsal_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run generate_new_rehearsal_trial always
	run run_rehearsal_trial always

define sequence run_rehearsal_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pygaze_start_recording always
	run item_script always
	run logger always
	run pygaze_stop_recording always
	run posttrial_checks always

define inline_script setup_and_functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	###########
	# Imports #
	###########
	
	import csv, random, os
	from expyriment import design
	from collections import OrderedDict
	
	
	
	##################
	# Stimulus files #
	##################
	
	#var.facts_file = "testWords.csv"
	#var.distractors_file = "distractors.csv"
	#var.facts_file = "demoTest.csv"
	#var.distractors_file = "demoDistractors.csv"
	var.facts_file = "zoeloeWords.csv"
	var.distractors_file = "distractorsZoeloe.csv"
	
	
	
	#########################
	# Set working directory #
	#########################
	
	if not 'slimmer-stampen' in os.getcwd():
		os.chdir('E:/slimmerstampen') # You may need to change this path for your system.
	
	
	
	####################
	# Global constants #
	####################
	
	var.rehearsal_time_limit = 20 * 60000 # time (minutes * ms) after which rehearsal phase is stopped
	var.min_repeat_lag = 2 # minimum number of other items between two presentations of the same item during rehearsal
	
	dummy_eyetracker = False # Set to false when using real eyetracker!
	
	
	####################
	# Global functions #
	####################
	
	def read_items_from_file(path):
		'''
		Reads a set of facts or distractors from a .csv file and returns them as a list.
		Each fact or distractor should be placed on a new line in the file.
		If the file contains facts, the columns should be arranged as follows: prompt, correct answer.
		Files containing distractors should only have a single column.
		The first line of the .csv file contains the column names, so this function removes it from the list.
		'''
		
		reader = csv.reader(open(path ,"rb"),delimiter=',')
		x = list(reader)
		return x[1:]
	
	
	def create_trial(prompt, answer, distractors):
		'''
		Creates a single trial, consisting of a prompt, correct answer, and two distractors.
		'''
		
		# A trial combines a prompt-answer pair with two random distractors
		distractor1 = random.choice(distractors)[0]
		distractor2 = random.choice(distractors)[0]
		
		# make sure that the distractors are not the same word
		while distractor1 == distractor2:
			distractor2 = random.choice(distractors)[0]
		
		trial = [prompt, answer, distractor1, distractor2]
		
		return trial
	
	def create_trials(facts, distractors):
		'''
		Creates a list of trials, each consisting of a prompt, correct answer, and two distractors.
		'''
		
		trials = []
		design.randomize.shuffle_list(facts)
	
		while len(facts) > 0:
			prompt, answer = facts.pop()
			trial = create_trial(prompt, answer, distractors)
			trials.append(trial)
		
		return trials
		
	
	def write_trials_to_file(trials, filename):
		'''
		Writes trials to a CSV file in the file pool that OpenSesame can read.
		'''
		
		# First remove any existing copy of the file if it exists
		try:
			print os.path.exists(filename)
			os.remove(filename)
		except OSError:
			pass
	
		with open(filename, 'wb') as csvfile:
			trialwriter = csv.writer(csvfile, delimiter=',')
			trialwriter.writerow(["PROMPT","ANSWER","DISTRACTOR1","DISTRACTOR2"])
			for trial in trials:
				trialwriter.writerow(trial)
		
		# Once the file is made, add it to the OpenSesame file pool
		pool.add(filename)
	
	
	
	def trim_artefacts(pupil_response):
		'''
		
		Takes a list of pupil size measurements and removes the largest and smallest 2.5% (5% in total).
		Returns the trimmed list.
		
		'''
		
		a = [x for x in pupil_response if x is not 0] # ignore values of zero
		list.sort(a)
		idx = int(round(0.025 * len(a))) # find number of values to remove from each end
		remove = a[-idx:] # find n largest values
		remove.extend(a[0:idx]) # find n smallest values
		
		return [x for x in pupil_response if x not in remove]
		
		
		
	
	def calculate_pcps(baseline, pupil_response):
		'''
		Calculates the largest positive percentage change in pupil size of a sample compared to a baseline.
		'''
		
		baseline = [x for x in baseline if x is not 0] 	# Remove zero values from baseline
		mean_baseline = float(sum(baseline))/max(len(baseline),1)
		max_response = max(pupil_response)
		
		# Avoid division by 0 error
		if mean_baseline is 0:
			return 0
		
		return max_response / mean_baseline
		
	
	####################
	# Data preparation #
	####################
	
	# Read prompts and correct answers from a file
	var.facts = read_items_from_file(var.facts_file)
	var.distractors = read_items_from_file(var.distractors_file)
	
	
	###################
	# Data collection #
	###################
	
	# Create data frame to hold item information
	df = []
	for f in var.facts:
		df.append(OrderedDict([("word",f[0]), ("translation",f[1]), ("num_presentations",0), ("last_presentation",0), ("num_correct",0), ("last_correct",0),  ("pcps",[])]))
		
	exp.set("df", df)
	
	
	def get_optimal_fact():
		'''
		Returns the most suitable prompt-answer pair.
		'''
		
		# See if there are any items for which we do not have any measurements yet.
		# If so, return one of those.
		try:
			fact = (item for item in var.df if item["num_presentations"] == 0).next()
			return [fact['word'], fact['translation']]
		except StopIteration:
			pass
		
		# If all items have been presented at least once, return the one with the highest pcps value (that is not too recent).
		max_pcps = 0
		fact = None
		for item in var.df:
			item_pcps = item["pcps"][-1]
			presentation_interval = var.trial_num - item["last_presentation"]
			
			# If the item was incorrect last time, multiply the PCPS with a penalty factor to make it more likely to be repeated
			penalty_factor = 1
			if item["last_correct"] == 0:
				penalty_factor = 1.1
			item_pcps = item_pcps * penalty_factor
			
			if item_pcps > max_pcps and presentation_interval > var.min_repeat_lag:
				max_pcps = item_pcps
				fact = item
		
		return [fact['word'], fact['translation']]
		
		
	def log_trial(word, correct, pcps, trial_num):
		'''
		Logs information from trial in the data frame.
		'''
	
		df_entry = (item for item in var.df if item["word"] == word).next()
		df_entry['num_presentations'] += 1
		df_entry['last_presentation'] = trial_num
		if correct:
			df_entry['num_correct'] += 1
			df_entry['last_correct'] = 1
		else:
			df_entry['last_correct'] = 0
		if dummy_eyetracker:
			# To make it more interesting, the pcps is set as a random float between 0 and 1.
			pcps = random.random()
		df_entry['pcps'].append(pcps)
		
		print "Logged trial:"
		print df_entry
	__end__

define sketchpad test_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="The practice phase is done.<br />Now it is time to test your knowledge.<br /><br />The test will proceed in the same way as the rehearsal.<br />You will see a Zulu word for which<br />you have to give the correct translation.<br />This time you will not receive any feedback.<br /><br />Press any key to start the test." x=0 y=0 z_index=0

define loop test_loop
	set source_file "testtrials.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run test_sequence

define inline_script test_script
	set description "Executes Python code"
	___run__
	##
	## Runs a test trial:
	## Starts by showing a 1000 ms fixation cross.
	## Then shows the prompt and the answer options for 5000 ms.
	## The participant has to click an answer within the time limit.
	## No feedback is given until the end.
	##
	
	## FIXATION ##
	# Show the fixation cross
	my_canvas = canvas()
	my_canvas.penwidth = 2
	my_canvas.fixdot(style='large-cross')
	my_canvas.show()
	exp.sleep(fixation_length)
	
	
	## PROMPT + ANSWERING ##
	# Show the prompt and the answer options
	my_canvas = canvas()
	my_canvas.text(prompt, font_size = prompt_font_size)
	for i in range(len(answer_options)):
		ypos = 75*(i+1)
		my_canvas.rect(x = -ans_width/2, y = ypos, w = ans_width, h = ans_height)
		my_canvas.text(answer_options[i], y = ypos+(ans_height/2))
	my_canvas.show()
	
	# Show the mouse, and wait for a mouse click
	my_mouse.show_cursor(True)
	
	start_time  = exp.time()
	response = None
	timed_out = False
	while True:
		# Stop once the participant has pressed a button
		if response is not None:
			rt = timestamp - start_time
			break
		
		# Otherwise get the latest mouse data
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # If there's a new left mouse click
			response = button_clicked(position) # Check if it's on a button		
			my_mouse.flush() # Get rid of click data
			
		# Stop when time is up and no button has been pressed
		if timestamp - start_time > max_response_time:
			timed_out = True
			response = -1
			rt = None
			print 'Timeout'
	
	
	correct_index = answer_options.index(var.ANSWER)
	ans_correct = response == correct_index
	
	incorrect_index = -1
	if not ans_correct:
		incorrect_index = response
	
	if ans_correct:
		var.score = var.score + 1
	
	# Hide the mouse cursor
	my_mouse.show_cursor(False)
	
	
	## DATA LOGGING ##
	if response is not None:
		if response is -1:
			response = "none"
		else:
			response = answer_options[response]
			
	exp.set("response", response)
	exp.set("accuracy", int(ans_correct))
	exp.set("rt", rt)
	exp.set("phase", "test")
	__end__
	___prepare__
	# Create a mouse object so that we can control mouse visibility
	my_mouse = mouse()
	my_mouse.show_cursor(False)
	
	# Time-related constants
	fixation_length = 1000
	max_response_time = 5000 # time that the participant has to press a button
	
	# Canvas-related constants
	ans_width = 250 # width of answer boxes
	ans_height = 60 # height of answer boxes
	prompt_font_size = 30 # Font size of prompt (in pixels)
	
	# Answer button coordinates
	button_coords = []
	for i in range(3):
		button = [-ans_width/2, 75*(i+1), ans_width, ans_height]
		button_coords.append(button)
	
	def button_clicked(pos):
		'''
		Returns button number if mouse position pos falls within the bounds of a button, and None otherwise.
		'''
		
		for i in range(len(button_coords)):
			button = button_coords[i]
	
			xmin = button[0]
			xmax = button[0] + button[2]
			ymin = button[1]
			ymax = button[1] + button[3]
	
			if (pos[0] >= xmin and pos[0] <= xmax and pos[1] >= ymin and pos[1] <= ymax):
				return i
		return None
		
	
	
	
	
	prompt = var.PROMPT
	
	# Shuffle answer options
	from expyriment import design
	
	# Shuffle the answer options
	answer_options = [var.ANSWER, var.DISTRACTOR1, var.DISTRACTOR2]
	design.randomize.shuffle_list(answer_options)
	__end__

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run test_script always
	run logger always

define loop while_there_is_time_left
	set source_file ""
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run rehearsal_trial_sequence

